PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_run%s' % (expInfo['participant'], expName, expInfo['run'])
  Experiment info = {'participant': '', 'run': ''}
  Full-screen window = True
  Monitor = UHD4K
  Screen = 2
  Units = height
  Window size (pixels) = [1200, 1920]
  colPriority = {'participant': 'priority.CRITICAL', 'run': 'priority.CRITICAL'}
  color = -1.0000, -1.0000, -1.0000
  expName = fMRI_Blocked_Fingers
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine startMsg
    RoutineSettingsComponent startMsg
      saveStartStop = False
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Waiting for Scanner...

        Repeatedly tap the cued finger while it is highlighted. Remain still when no finger is highlighted.
    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine scannerDelay
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    PolygonComponent fixation
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
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  Routine trial
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    ImageComponent image
      image [set every repeat] = $condsFile
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
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    PolygonComponent trialFixation
      fillColor = -1.0000, 1.0000, -0.0039
      lineColor = 0.0000, 0.0000, 0.0000
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine completedMsg
    RoutineSettingsComponent completedMsg
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = End of this scan. Well done!
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Flow
  Routine startMsg
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = fingersBlock.xlsx
    loopType = fullRandom
    nReps = 5
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    conditions:
      [{'condsFile': 'stims/finger_images/ThumbCue.jpg'},
      {'condsFile': 'stims/finger_images/IndexCue.jpg'},
      {'condsFile': 'stims/finger_images/MiddleCue.jpg'},
      {'condsFile': 'stims/finger_images/RingCue.jpg'},
      {'condsFile': 'stims/finger_images/PinkieCue.jpg'},
      {'condsFile': 'stims/finger_images/Rest.jpg'}]
    Routine trial
  LoopTerminator trials
  Routine completedMsg
